PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychophysics_project
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Routines
  Routine block2
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_2
      image [set every repeat] = $stim_file
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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  Routine block1
    ImageComponent image
      image [set every repeat] = $stim_file
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2.0
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    TextComponent text2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
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  Routine rec
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image_3
      image [set every repeat] = $stim_file
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
      text = Had you seen this stimulus before?
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
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  Routine instructions
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Welcome to this experiment and thank you for your participation!
        In the first part of the experiment, you will have to press the space bar when you see a rectangle inside the square. If you see a circle, do not press any key.
        Press space bar to start the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
    TextComponent text_3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        You have completed the first block. In the next block, you will have to press space bar when you see a circle inside the square. If you see a rectangle, do not press any key.
        Press space bar to continue with the next block
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_3
    TextComponent text_6
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        You are now done with this task. There is one last block.
        Now you will be presented with some stimuli you have seen before and other novel stimuli. After each stimulus, you will be asked if you have seen it before. When you see the question, press the ‘right’ key if you have seen it before, or the ‘left’ key if you have not.
        Press space bar to continue with the experiment.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = rectangles.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'nonsalient', 'task': 'go', 'stim_file': '1go.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '1go1.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '1go2.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '1go3.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '1go4.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '1gov.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '1gov1.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '1gov2.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '1gov3.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '1gov4.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '1nogo.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '1nogo1.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '1nogo2.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '1nogo3.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '1nogo4.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '1nogov.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '1nogov1.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '1nogov2.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '1nogov3.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '1nogov4.png'}]
    Routine block1
  LoopTerminator trials
  Routine instructions_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = circles.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'nonsalient', 'task': 'go', 'stim_file': '2go.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '2go1.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '2go2.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '2go3.png'},
      {'condition': 'nonsalient', 'task': 'go', 'stim_file': '2go4.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '2gov.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '2gov1.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '2gov2.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '2gov3.png'},
      {'condition': 'salient', 'task': 'go', 'stim_file': '2gov4.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '2nogo.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '2nogo1.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '2nogo2.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '2nogo3.png'},
      {'condition': 'nonsalient', 'task': 'nogo', 'stim_file': '2nogo4.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '2nogov.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '2nogov1.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '2nogov2.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '2nogov3.png'},
      {'condition': 'salient', 'task': 'nogo', 'stim_file': '2nogov4.png'}]
    Routine block2
  LoopTerminator trials_2
  Routine instructions_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = yesno.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'type': 'st', 'stim_file': '1nogo.png', 'condition': 'nonsalient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogo1.png', 'condition': 'nonsalient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogo2.png', 'condition': 'nonsalient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogo3.png', 'condition': 'nonsalient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogo4.png', 'condition': 'nonsalient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogov.png', 'condition': 'salient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogov1.png', 'condition': 'salient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogov2.png', 'condition': 'salient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogov3.png', 'condition': 'salient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1nogov4.png', 'condition': 'salient', 'shape': 'circle'},
      {'type': 'st', 'stim_file': '1go.png', 'condition': 'nonsalient', 'shape': 'rectangle'},
      {'type': 'st', 'stim_file': '1go1.png', 'condition': 'nonsalient', 'shape': 'rectangle'},
      {'type': 'st', 'stim_file': '1go2.png', 'condition': 'nonsalient', 'shape': 'rectangle'},
      {'type': 'st', 'stim_file': '1go3.png', 'condition': 'nonsalient', 'shape': 'rectangle'},
      {'type': 'st', 'stim_file': '1go4.png', 'condition': 'nonsalient', 'shape': 'rectangle'},
      {'type': 'st', 'stim_file': '1gov.png', 'condition': 'salient', 'shape': 'rectangle'},
      {'type': 'st', 'stim_file': '1gov1.png', 'condition': 'salient', 'shape': 'rectangle'}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
    Routine rec
  LoopTerminator trials_3
